PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  color = white
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Save csv file = True
  expName = click_exp
  Screen = 1
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Routines
  Routine formal_click
    TextComponent point_for
      color = black
      text = +
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_for
      forceEndRoutine = True
      allowedKeys [set every repeat] = ans
      startVal [time (s)] = 1
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    ImageComponent image_for
      startVal [time (s)] = 1
      image [set every repeat] = $pic
      size = (0.45, 0.8)
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  Routine form
    TextComponent text
      color = black
      text = x
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      font = Consolas
      letterHeight = 0.1
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  Routine practice_click
    ImageComponent image_practice
      startVal [time (s)] = 1
      image [set every repeat] = $pic
      size = (0.45, 0.8)
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    KeyboardComponent key_resp_2
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = ans
      startVal [time (s)] = 1
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    TextComponent point_prac
      color = black
      text = +
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine formal_wel
    TextComponent text_base
      color = black
      startVal [time (s)] = 0.0
      font = Consolas
      letterHeight = 0.1
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      text:
        请休息一下

        请您又快又准地按小键盘上的对应数字

        按空格键继续
    KeyboardComponent key_resp_for_wel
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine wel
    TextComponent wel_text
      color = black
      startVal [time (s)] = 0.0
      font = Consolas
      letterHeight = 0.1
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      text:
        你好

        在接下来的实验中

        屏幕上会出现一个3*3的数字表

        格式和小键盘的数字相同

        其中有一个数字的背景色和其他的不同

        请您又快又准地按小键盘上的对应数字

        如果理解了，请按空格键进入练习
    KeyboardComponent key_resp_wel
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine huan
    TextComponent huan_point
      color = black
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image_huan
      startVal [time (s)] = 1
      image [set every repeat] = $pic
      size = (0.45, 0.8)
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    KeyboardComponent key_resp_huan
      forceEndRoutine = True
      allowedKeys [set every repeat] = ans
      startVal [time (s)] = 1
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  Routine baseline_click
    TextComponent point_base
      color = black
      text = +
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image_base
      startVal [time (s)] = 1
      image [set every repeat] = $pic
      size = (0.45, 0.8)
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    KeyboardComponent key_resp_base
      forceEndRoutine = True
      allowedKeys [set every repeat] = ans
      startVal [time (s)] = 1
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Flow
  Routine wel
  LoopInitiator trials_prac loopType="TrialHandler"
    conditionsFile = pic\prac_click.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('no', 1), ('pic', u'pic/1.png'), ('cla', u'practice'), ('ans', ['1'])]),
      OrderedDict([('no', 2), ('pic', u'pic/2.png'), ('cla', u'practice'), ('ans', ['2'])]),
      OrderedDict([('no', 3), ('pic', u'pic/3.png'), ('cla', u'practice'), ('ans', ['3'])]),
      OrderedDict([('no', 4), ('pic', u'pic/4.png'), ('cla', u'practice'), ('ans', ['4'])]),
      OrderedDict([('no', 5), ('pic', u'pic/5.png'), ('cla', u'practice'), ('ans', ['5'])]),
      OrderedDict([('no', 6), ('pic', u'pic/6.png'), ('cla', u'practice'), ('ans', ['6'])]),
      OrderedDict([('no', 7), ('pic', u'pic/7.png'), ('cla', u'practice'), ('ans', ['7'])]),
      OrderedDict([('no', 8), ('pic', u'pic/8.png'), ('cla', u'practice'), ('ans', ['8'])]),
      OrderedDict([('no', 9), ('pic', u'pic/9.png'), ('cla', u'practice'), ('ans', ['9'])]),
      OrderedDict([('no', 10), ('pic', u'pic/1.png'), ('cla', u'practice'), ('ans', ['1'])]),
      OrderedDict([('no', 11), ('pic', u'pic/2.png'), ('cla', u'practice'), ('ans', ['2'])]),
      OrderedDict([('no', 12), ('pic', u'pic/3.png'), ('cla', u'practice'), ('ans', ['3'])]),
      OrderedDict([('no', 13), ('pic', u'pic/4.png'), ('cla', u'practice'), ('ans', ['4'])]),
      OrderedDict([('no', 14), ('pic', u'pic/5.png'), ('cla', u'practice'), ('ans', ['5'])]),
      OrderedDict([('no', 15), ('pic', u'pic/6.png'), ('cla', u'practice'), ('ans', ['6'])]),
      OrderedDict([('no', 16), ('pic', u'pic/7.png'), ('cla', u'practice'), ('ans', ['7'])]),
      OrderedDict([('no', 17), ('pic', u'pic/8.png'), ('cla', u'practice'), ('ans', ['8'])])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
    Routine practice_click
  LoopTerminator trials_prac
  Routine formal_wel
  LoopInitiator trials_huan loopType="TrialHandler"
    conditionsFile = pic\huan.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('no', 1), ('pic', u'pic/2.png'), ('cla', u'huan'), ('ans', ['num_2'])]),
      OrderedDict([('no', 2), ('pic', u'pic/9.png'), ('cla', u'huan'), ('ans', ['num_9'])])]
    Routine huan
  LoopTerminator trials_huan
  LoopInitiator trials_baseline loopType="TrialHandler"
    conditionsFile = pic\baseline_c.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('no', 1), ('pic', u'pic/1.png'), ('cla', u'baseline'), ('ans', ['1'])]),
      OrderedDict([('no', 2), ('pic', u'pic/2.png'), ('cla', u'baseline'), ('ans', ['2'])]),
      OrderedDict([('no', 3), ('pic', u'pic/3.png'), ('cla', u'baseline'), ('ans', ['3'])]),
      OrderedDict([('no', 4), ('pic', u'pic/4.png'), ('cla', u'baseline'), ('ans', ['4'])]),
      OrderedDict([('no', 5), ('pic', u'pic/5.png'), ('cla', u'baseline'), ('ans', ['5'])]),
      OrderedDict([('no', 6), ('pic', u'pic/6.png'), ('cla', u'baseline'), ('ans', ['6'])]),
      OrderedDict([('no', 7), ('pic', u'pic/7.png'), ('cla', u'baseline'), ('ans', ['7'])]),
      OrderedDict([('no', 8), ('pic', u'pic/8.png'), ('cla', u'baseline'), ('ans', ['8'])]),
      OrderedDict([('no', 9), ('pic', u'pic/9.png'), ('cla', u'baseline'), ('ans', ['9'])]),
      OrderedDict([('no', 10), ('pic', u'pic/1.png'), ('cla', u'baseline'), ('ans', ['1'])]),
      OrderedDict([('no', 11), ('pic', u'pic/2.png'), ('cla', u'baseline'), ('ans', ['2'])]),
      OrderedDict([('no', 12), ('pic', u'pic/3.png'), ('cla', u'baseline'), ('ans', ['3'])]),
      OrderedDict([('no', 13), ('pic', u'pic/4.png'), ('cla', u'baseline'), ('ans', ['4'])]),
      OrderedDict([('no', 14), ('pic', u'pic/5.png'), ('cla', u'baseline'), ('ans', ['5'])]),
      OrderedDict([('no', 15), ('pic', u'pic/6.png'), ('cla', u'baseline'), ('ans', ['6'])]),
      OrderedDict([('no', 16), ('pic', u'pic/7.png'), ('cla', u'baseline'), ('ans', ['7'])]),
      OrderedDict([('no', 17), ('pic', u'pic/8.png'), ('cla', u'baseline'), ('ans', ['8'])])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
    Routine baseline_click
  LoopTerminator trials_baseline
  LoopInitiator trials_formal loopType="TrialHandler"
    conditionsFile = pic\formal_click.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('pic', u'pic/4.png'), ('ans', ['num_4']), ('cla', u'aa'), ('no', 1)]),
      OrderedDict([('pic', u'pic/4.png'), ('ans', ['num_4']), ('cla', u'aa'), ('no', 2)]),
      OrderedDict([('pic', u'pic/5.png'), ('ans', ['num_5']), ('cla', u'aa'), ('no', 3)]),
      OrderedDict([('pic', u'pic/5.png'), ('ans', ['num_5']), ('cla', u'aa'), ('no', 4)]),
      OrderedDict([('pic', u'pic/4.png'), ('ans', ['num_4']), ('cla', u'aa'), ('no', 5)]),
      OrderedDict([('pic', u'pic/4.png'), ('ans', ['num_4']), ('cla', u'aa'), ('no', 6)]),
      OrderedDict([('pic', u'pic/7.png'), ('ans', ['num_7']), ('cla', u'aa'), ('no', 7)]),
      OrderedDict([('pic', u'pic/7.png'), ('ans', ['num_7']), ('cla', u'aa'), ('no', 8)]),
      OrderedDict([('pic', u'pic/6.png'), ('ans', ['num_6']), ('cla', u'aa'), ('no', 9)]),
      OrderedDict([('pic', u'pic/6.png'), ('ans', ['num_6']), ('cla', u'aa'), ('no', 10)]),
      OrderedDict([('pic', u'pic/4.png'), ('ans', ['num_4']), ('cla', u'huan'), ('no', 11)]),
      OrderedDict([('pic', u'pic/6.png'), ('ans', ['num_6']), ('cla', u'huan'), ('no', 12)]),
      OrderedDict([('pic', u'pic/7.png'), ('ans', ['num_7']), ('cla', u'aaa'), ('no', 13)]),
      OrderedDict([('pic', u'pic/7.png'), ('ans', ['num_7']), ('cla', u'aaa'), ('no', 14)]),
      OrderedDict([('pic', u'pic/7.png'), ('ans', ['num_7']), ('cla', u'aaa'), ('no', 15)]),
      OrderedDict([('pic', u'pic/2.png'), ('ans', ['num_2']), ('cla', u'aaa'), ('no', 16)]),
      OrderedDict([('pic', u'pic/2.png'), ('ans', ['num_2']), ('cla', u'aaa'), ('no', 17)])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
    Routine formal_click
  LoopTerminator trials_formal
