PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  color = white
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = height
  Window size (pixels) = [1200, 800]
  Full-screen window = True
  Use version = 1.90.3
  expName = exp
  Screen = 1
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Routines
  Routine click_re
    ImageComponent image
      startVal [time (s)] = 0.0
      image [set every repeat] = $pic
      size = (0.5, 0.5)
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    KeyboardComponent key_resp_prac
      correctAns = $ans
      forceEndRoutine = True
      allowedKeys [set every repeat] = ans
      startVal [time (s)] = 0.0
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  Routine que_omri
    RatingScaleComponent rating_omri
      pos = 0, -0.4
      high = 5
      startVal [time (s)] = 0.0
      size = 1.0
      storeRatingTime = False
      forceEndRoutine = True
      low = 1
      customize_everything = textColor = 'black', marker = 'triangle', acceptPreText=None,low=1, high=5, precision=1, choices=('1', '2','3','4','5'),noMouse=True, scale=None, markerStart = None,stretch = 2
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    ImageComponent image_omri
      startVal [time (s)] = 0.0
      image [set every repeat] = $que
      size = (1.5, 1.5*5/120)
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  Routine ug_1
    TextComponent ug_text_1
      color = black
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      font = Consolas
      letterHeight = 0.02
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      text:
        你和一个人分配100元

        规则是他来分配，你来决定是否接受

        如果接受，就根据此方案分配。如果拒绝，则双方都不会得到钱

        （不考虑本次分配结束后双方进一步交换的可能性）。

        那么你是否接受你和他的金钱分配比例是1：99呢？
    RatingScaleComponent rating_ug1
      labels = 否, 是
      pos = 0, -0.6
      high = 1
      startVal [time (s)] = 0.0
      markerStart = 0.5
      size = 1.0
      showAccept = False
      storeRatingTime = False
      forceEndRoutine = True
      low = 0
      customize_everything = textColor = 'black', marker = 'triangle',low=0, high=1, precision=1, labels = ('No','Yes'), noMouse=True, scale=None, markerStart = None,stretch = 2
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  Routine omri_wel
    TextComponent omri_wel_text
      color = black
      startVal [time (s)] = 0.0
      font = Consolas
      letterHeight = 0.03
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      text:
        “1”代表“完全不符合”，“2”代表“比较不符合”，“3”代表“一般”

        “4”代表“比较符合”，“5”代表“完全符合”
    KeyboardComponent omri_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine wel
    TextComponent text_wel
      color = black
      startVal [time (s)] = 0.0
      font = Consolas
      letterHeight = 0.1
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      text:
        你好

        你妈死了
    KeyboardComponent wel_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator trials_c loopType="TrialHandler"
    conditionsFile = pic\prac_click.csv
    loopType = random
    nReps = 1
    Selected rows = 0
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    conditions:
      [OrderedDict([('no', 1), ('pic', u'pic/1.png'), ('ha', u'practice'), ('ans', ['1'])]),
      OrderedDict([('no', 2), ('pic', u'pic/2.png'), ('ha', u'practice'), ('ans', ['2'])]),
      OrderedDict([('no', 3), ('pic', u'pic/3.png'), ('ha', u'practice'), ('ans', ['3'])]),
      OrderedDict([('no', 4), ('pic', u'pic/4.png'), ('ha', u'practice'), ('ans', ['4'])]),
      OrderedDict([('no', 5), ('pic', u'pic/5.png'), ('ha', u'practice'), ('ans', ['5'])]),
      OrderedDict([('no', 6), ('pic', u'pic/6.png'), ('ha', u'practice'), ('ans', ['6'])]),
      OrderedDict([('no', 7), ('pic', u'pic/7.png'), ('ha', u'practice'), ('ans', ['7'])]),
      OrderedDict([('no', 8), ('pic', u'pic/8.png'), ('ha', u'practice'), ('ans', ['8'])]),
      OrderedDict([('no', 9), ('pic', u'pic/9.png'), ('ha', u'practice'), ('ans', ['9'])]),
      OrderedDict([('no', 1), ('pic', u'pic/1.png'), ('ha', u'practice'), ('ans', ['1'])]),
      OrderedDict([('no', 2), ('pic', u'pic/2.png'), ('ha', u'practice'), ('ans', ['2'])]),
      OrderedDict([('no', 3), ('pic', u'pic/3.png'), ('ha', u'practice'), ('ans', ['3'])]),
      OrderedDict([('no', 4), ('pic', u'pic/4.png'), ('ha', u'practice'), ('ans', ['4'])]),
      OrderedDict([('no', 5), ('pic', u'pic/5.png'), ('ha', u'practice'), ('ans', ['5'])]),
      OrderedDict([('no', 6), ('pic', u'pic/6.png'), ('ha', u'practice'), ('ans', ['6'])]),
      OrderedDict([('no', 7), ('pic', u'pic/7.png'), ('ha', u'practice'), ('ans', ['7'])]),
      OrderedDict([('no', 8), ('pic', u'pic/8.png'), ('ha', u'practice'), ('ans', ['8'])])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
    Routine click_re
  LoopTerminator trials_c
  Routine wel
  Routine omri_wel
  LoopInitiator omri loopType="TrialHandler"
    conditionsFile = omri.xlsx
    loopType = sequential
    nReps = 1
    Selected rows = 0
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    conditions:
      [OrderedDict([('no', 1), ('que', u'omri/omri1.jpg'), ('factor', u'GP1')]),
      OrderedDict([('no', 2), ('que', u'omri/omri2.jpg'), ('factor', u'GP2')]),
      OrderedDict([('no', 3), ('que', u'omri/omri3.jpg'), ('factor', u'GP3')]),
      OrderedDict([('no', 4), ('que', u'omri/omri4.jpg'), ('factor', u'GP4')]),
      OrderedDict([('no', 5), ('que', u'omri/omri5.jpg'), ('factor', u'GP5')]),
      OrderedDict([('no', 6), ('que', u'omri/omri6.jpg'), ('factor', u'InS1')]),
      OrderedDict([('no', 7), ('que', u'omri/omri7.jpg'), ('factor', u'InS2')]),
      OrderedDict([('no', 8), ('que', u'omri/omri8.jpg'), ('factor', u'InS3')]),
      OrderedDict([('no', 9), ('que', u'omri/omri9.jpg'), ('factor', u'InS4')]),
      OrderedDict([('no', 10), ('que', u'omri/omri10.jpg'), ('factor', u'InS5')]),
      OrderedDict([('no', 11), ('que', u'omri/omri11.jpg'), ('factor', u'Gen1')]),
      OrderedDict([('no', 12), ('que', u'omri/omri12.jpg'), ('factor', u'Gen2')]),
      OrderedDict([('no', 13), ('que', u'omri/omri13.jpg'), ('factor', u'Gen3')]),
      OrderedDict([('no', 14), ('que', u'omri/omri14.jpg'), ('factor', u'Gen4')]),
      OrderedDict([('no', 15), ('que', u'omri/omri15.jpg'), ('factor', u'Gen5')]),
      OrderedDict([('no', 16), ('que', u'omri/omri16.jpg'), ('factor', u'Gen6')])]
    Routine que_omri
  LoopTerminator omri
  Routine ug_1
